PsychoPy2experiment version="2023.1.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = onlywordtaskworking2
  keyboardBackend = ioHub
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Routines
  Routine text_expl
    TextComponent Explanation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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  Routine baseline_3mn
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Please take deep breath, stay sit and relax.
        We are collecting data for the next 3min.
  Routine First_SAM
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = Please indicate now how you feel
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  Routine Music_induction
    SoundComponent EIM
      sound [set every repeat] = $audioStim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200.0
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    TextComponent Exp_EIM
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200.0
      text [set every repeat] = Now close your eyes and listen to the audio please.
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  Routine Second_Sam
  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Thank you for participating to our research study.
        :)
  Routine study
    TextComponent words_to_study
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimWord
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  Routine recall
    TextComponent recall_instructions
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = Now say the words you remember and click on continue when you are done. 
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    MicrophoneComponent mic
      channels = mono
      device = None
      maxSize = 24000
      outputType = wav
      sampleRate = CD Audio (44.1kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 100
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      transcribeWords = stimWord
      trimSilent = False
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        You will now start a free recall task.
        You will see 4 sequences of 15 fifteen words, displayed one a a time.
        After 15 words, you will write the maximum of words you can recall, with the keyboard.

        Press space to start.
    KeyboardComponent key_to_start
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine code_2
  Routine code_block
    CodeComponent code_4
      Code Type = Py
      Before Experiment:
        useRows = '0:1'
        wordList = ['0:15','15:30','30:45','45:60','60:75','75:90','90:105','105:120','120:135','135:150','150:165','165:180','180:195','195:210','210:225']
        shuffle(wordList)
      Begin Routine:
        useRows = wordList.pop()
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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Flow
  Routine Instruction
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine code_block
    LoopInitiator trial loopType="TrialHandler"
      Selected rows = $useRows
      conditionsFile = list_words2.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'list_nmbr': 1, 'stimWord': 'Patch', 'Cluster': 'Primacy'},
        {'list_nmbr': 1, 'stimWord': 'Pole', 'Cluster': 'Primacy'},
        {'list_nmbr': 1, 'stimWord': 'Mount', 'Cluster': 'Primacy'},
        {'list_nmbr': 1, 'stimWord': 'Dog', 'Cluster': 'Primacy'},
        {'list_nmbr': 1, 'stimWord': 'Shore', 'Cluster': 'Primacy'},
        {'list_nmbr': 1, 'stimWord': 'Night', 'Cluster': 'Middlecy'},
        {'list_nmbr': 1, 'stimWord': 'Walnut', 'Cluster': 'Middlecy'},
        {'list_nmbr': 1, 'stimWord': 'Paper', 'Cluster': 'Middlecy'},
        {'list_nmbr': 1, 'stimWord': 'Trot', 'Cluster': 'Middlecy'},
        {'list_nmbr': 1, 'stimWord': 'Chicken', 'Cluster': 'Middlecy'},
        {'list_nmbr': 1, 'stimWord': 'Oil', 'Cluster': 'Recency'},
        {'list_nmbr': 1, 'stimWord': 'Thrush', 'Cluster': 'Recency'},
        {'list_nmbr': 1, 'stimWord': 'Pumpkin', 'Cluster': 'Recency'},
        {'list_nmbr': 1, 'stimWord': 'Tree', 'Cluster': 'Recency'},
        {'list_nmbr': 1, 'stimWord': 'Orange', 'Cluster': 'Recency'},
        {'list_nmbr': 2, 'stimWord': 'Year', 'Cluster': 'Primacy'},
        {'list_nmbr': 2, 'stimWord': 'Wall', 'Cluster': 'Primacy'},
        {'list_nmbr': 2, 'stimWord': 'Stone', 'Cluster': 'Primacy'},
        {'list_nmbr': 2, 'stimWord': 'Ship', 'Cluster': 'Primacy'},
        {'list_nmbr': 2, 'stimWord': 'Pizza', 'Cluster': 'Primacy'},
        {'list_nmbr': 2, 'stimWord': 'Blackberry', 'Cluster': 'Middlecy'},
        {'list_nmbr': 2, 'stimWord': 'Heart', 'Cluster': 'Middlecy'},
        {'list_nmbr': 2, 'stimWord': 'Paw', 'Cluster': 'Middlecy'},
        {'list_nmbr': 2, 'stimWord': 'Name', 'Cluster': 'Middlecy'},
        {'list_nmbr': 2, 'stimWord': 'Little', 'Cluster': 'Middlecy'}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
      Routine study
    LoopTerminator trial
    Routine recall
  LoopTerminator block
  Routine end
